Source:Signal%20Properties int SourceCh= 8 16 1 % // number of digitized and stored channels
Source:Signal%20Properties int SampleBlockSize= 8 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties int SamplingRate= 256 256Hz 1 % // sample rate
Source:Signal%20Properties list ChannelNames= 8 Ch1 Ch2 Ch3 Ch4 Ch5 Ch6 Ch7 Ch8 // list of channel names
Source:Signal%20Properties floatlist SourceChOffset= 8 0 0 0 0 0 0 0 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties floatlist SourceChGain= 8 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location string DataDirectory= ../data ../data % % // path to top level data directory (directory)
Storage:Session string SubjectName= test Name % % // subject alias
Storage:Session string SubjectSession= 001 001 % % // three-digit session number
Storage:Session string SubjectRun= 01 00 % % // two-digit run number
Storage:Documentation string ID_System= % // BCI2000 System Code
Storage:Documentation string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation string ID_Montage= % // BCI2000 Cap Montage Code
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Source:RandomNumberADC int ModulateAmplitude= 1 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:RandomNumberADC int SineChannelX= 1 0 0 % // Channel number of sinewave controlled by mouse x position
Source:RandomNumberADC int SineChannelY= 2 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:RandomNumberADC float SineFrequency= 120Hz 120Hz % % // Frequency of sine wave
Source:RandomNumberADC int SineAmplitude= 100muV 100muV % % // Amplitude of sine wave
Source:RandomNumberADC int NoiseAmplitude= 0muV 0muV % % // Amplitude of white noise (common to all channels)
Source:RandomNumberADC int DCOffset= 0 0muV % % // DC offset (common to all channels)
Source:RandomNumberADC string OffsetMultiplier= % StimulusType % % // Expression to multiply offset by
Source:RandomNumberADC int RandomSeed= 0 0 0 1 // Initialization value for random number generator (initialize from time if 0)
Source:RandomNumberADC int SignalType= 0 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Storage:BCI2000FileWriter int SavePrmFile= 0 1 0 1 // save additional parameter file (0=no, 1=yes) (boolean)
Storage:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Source%20Filter int NotchFilter= 0 0 0 2 // Power line notch filter: 0: disabled, 1: at 50Hz, 2: at 60Hz (enumeration)
Source:Source%20Filter int HighPassFilter= 0 0 0 1 // Source high pass filter: 0: disabled, 1: at 0.1Hz (enumeration)
Source:Alignment int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
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Source:Online%20Processing stringlist TransmitChList= 1 * 1 1 128 // list of transmitted channels
Filtering:SpatialFilter matrix SpatialFilter= 4 4 1 0 0 0 0 1 0 0 0 0 1 0 0 0 0 1 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter int SpatialFilterType= 0 // 
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Filtering:ARFilter int WindowLength= 0.5s 0.5s % % // Time window for spectrum computation
Filtering:ARFilter int Detrend= 0 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:ARFilter int ModelOrder= 16 16 0 % // AR model order
Filtering:ARFilter int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: AR Coefficients (enumeration)
Filtering:ARFilter float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin in Hz
Filtering:ARFilter float LastBinCenter= 30Hz 30Hz % % // Center of last frequency bin in Hz
Filtering:ARFilter float BinWidth= 3Hz 3Hz % % // Width of spectral bins in Hz
Filtering:ARFilter int EvaluationsPerBin= 15 15 1 % // Number of uniformly spaced evaluation points entering into a single bin value
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Filtering:LPFilter float LPTimeConstant= 0 16s 0 % // time constant for the low pass filter
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Filtering:LinearClassifier matrix Classifier= 2 { input%20channel input%20element%20(bin) output%20channel weight } 1 4 1 1 2 4 2 1 // Linear classification matrix in sparse representation
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Filtering:Normalizer floatlist NormalizerOffsets= 3 190 160 0 0 % % // normalizer offsets
Filtering:Normalizer floatlist NormalizerGains= 3 0.02 0.02 0 0 % % // normalizer gain values
Filtering:Normalizer intlist Adaptation= 3 2 2 0 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Filtering:Normalizer matrix BufferConditions= 2 2 0 0 0 0 // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Filtering:Normalizer float BufferLength= 4s 9s % % // time window of past data per buffer that enters into statistic
Filtering:Normalizer string UpdateTrigger= // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
